PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = emotion-regulation
  expVersion = 0.1
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine welcome
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    TextComponent t_body
      letterHeight = 0.07
      pos = (0.0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Message
      units = height
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    TextComponent t_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to continue
      units = height
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    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    RoutineSettingsComponent trial
      stopVal [duration (s)] = 5
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_IASP
      image [set every repeat] = $photo_filename
      size [set every repeat] = $[img_width, img_height]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = height
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    CodeComponent code_IASP_helper
      Code Type = Py
      Begin Experiment:
        # Image aspect ratio (width / height)
        img_aspect = 1024 / 768  # = 1.3333

        # Window aspect ratio (width / height)
        screen_width, screen_height = win.size
        win_aspect = screen_width / screen_height  # width / height

        # If the window is wider than the image, height is the limiting factor
        if win_aspect >= img_aspect:
            # Height fills the screen (minus a small margin if you want)
            img_height = 1.0
            img_width = img_height * img_aspect
        else:
            # Width fills the screen
            img_width = win_aspect
            img_height = img_width / img_aspect

        # If you want a little breathing room around the image:
        #margin = 0.05  # 5% margin
        #img_height *= (1 - margin)
        #img_width  *= (1 - margin)
  Routine reset
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    CodeComponent code_slicer_generator
      Code Type = Py
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      Before Experiment:
        import random
        import csv
        import os

        placeholder_filename = 'IASP/placeholder.jpg'

        # Fallback: if placeholder image is absent, use empty string to avoid PsychoPy crash
        if not os.path.exists(placeholder_filename):
            print("Warning: placeholder image not found; using empty string to avoid crash.")
            placeholder_filename = ''

        # Techniques and blocks
        techniques = ['View', 'Suppress', 'Reappraise', 'Suppress and Reappraise']
        block_ids = ['block1', 'block2', 'block3', 'block4']

        # Photo sets per block
        photo_sets = {
            'block1': [1019, 1040, 1070, 1110, 1201, 1321, 2130, 2691, 2700, 2751, 2811, 3016, 3215, 3301, 5920, 6010, 6242, 6311, 6370, 6800, 6940, 8485, 9041, 9180, 9230, 9300, 9340, 9404, 9410, 9419, 9425, 9430, 9471, 9561, 9584, 9611, 9635, 9900, 9910, 9920],
            'block2': [1022, 1050, 1080, 1111, 1274, 1302, 2120, 2683, 2695, 2705, 2800, 3005, 3181, 3300, 4621, 5973, 6241, 6260, 6315, 6571, 6840, 8480, 9040, 9140, 9220, 9270, 9330, 9373, 9411, 9420, 9426, 9440, 9480, 9570, 9592, 9620, 9700, 9901, 9911, 9921],
            'block3': [1026, 1051, 1090, 1114, 1275, 1301, 2095, 2220, 2694, 2704, 2799, 3001, 3110, 3230, 3530, 5971, 6212, 6250, 6313, 6560, 6383, 8231, 9001, 9120, 9210, 9254, 9320, 9342, 9409, 9417, 9423, 9429, 9470, 9520, 9582, 9600, 9630, 9830, 9903, 9913],
            'block4': [1030, 1052, 1101, 1200, 1300, 1932, 2205, 2692, 2703, 2795, 2900, 3030, 3225, 3500, 5950, 6200, 6243, 6312, 6550, 6821, 8230, 9000, 9050, 9181, 9250, 9301, 9341, 9405, 9415, 9421, 9427, 9452, 9490, 9571, 9594, 9622, 9810, 9902, 9912, 9925],
        }

        block_neutral = [2272, 2383, 2393, 2396, 2397, 2435, 2480, 2514, 2518, 2575, 2580, 2593, 2594, 2870, 2880, 2980, 5395, 5455, 5471, 5520, 5740, 7002, 7004, 7036, 7037, 7041, 7130, 7140, 7205, 7217, 7491, 7493, 7495, 7496, 7504, 7546, 7550, 7640, 7705, 8221]
        block_practice = [1205, 3103, 3180, 3213, 3220, 3280, 5970, 6190]

        all_sets = list(photo_sets.values()) + [block_neutral, block_practice]

        # Check to see if any photos are missing
        def check_missing_photos(photo_id: str) -> bool:
            return not os.path.exists(f"IASP/{photo_id}.jpg")

        missing_list = [
            photo_id
            for block in all_sets
            for photo_id in block
            if check_missing_photos(photo_id)
        ]

        missing_set = set(missing_list)

        if missing_list:
            print(f"Missing stimuli: {len(missing_set)}")
            print("Names:", sorted(missing_set))
        else:
            print("All files found.")

        # ----------------------------------------------------------
        # Check for extra files in IASP/ that are not referenced in any block
        def _collect_image_ids(folder: str) -> set[int]:
            ids = set()
            try:
                for name in os.listdir(folder):
                    lower = name.lower()
                    if lower.endswith(('.jpg', '.jpeg')):
                        stem, _ = os.path.splitext(name)
                        if stem.lower() == 'placeholder':
                            continue
                        if stem.isdigit():
                            ids.add(int(stem))
            except FileNotFoundError:
                pass
            return ids

        iasp_folder = 'IASP'
        available_ids = _collect_image_ids(iasp_folder)
        expected_ids = {pid for block in all_sets for pid in block}
        extra_ids = sorted(available_ids - expected_ids)

        if not os.path.isdir(iasp_folder):
            print("IASP folder not found; skipping extra-file check.")
        elif extra_ids:
            print(f"Extra stimuli in IASP not used: {len(extra_ids)}")
            print("Names:", extra_ids)
        else:
            print("No extra stimuli in IASP.")

        # ----------------------------------------------------------
        # Create negative blocks trials file
        # Randomly assign techniques to blocks
        negative_file_name = 'emotion_regulation_unpleasant_trials.csv'

        random.shuffle(techniques)
        block_to_technique = dict(zip(block_ids, techniques))

        # Randomize block order
        block_order = block_ids.copy()
        random.shuffle(block_order)

        # Build trial list
        trials = []
        trial_number = 1

        for block in block_order:
            technique = block_to_technique[block]
            photos = photo_sets[block].copy()
            random.shuffle(photos)

            for photo_id in photos:
                if photo_id in missing_set:
                    photo_path = placeholder_filename
                else:
                    photo_path = f"IASP/{photo_id}.jpg"

                trials.append({
                    'trial_number': trial_number,
                    'block_id': block,
                    'technique': technique,
                    'photo_filename': photo_path
                })
                trial_number += 1

        # Save to CSV
        with open(negative_file_name, 'w', newline='') as f:
            writer = csv.DictWriter(f, fieldnames=trials[0].keys())
            writer.writeheader()
            writer.writerows(trials)

        print(f"Saved randomized trial file: {negative_file_name}")

        # ----------------------------------------------------------
        # Create block_neutral trials file
        neutral_file_name = 'emotion_regulation_neutral_trials.csv'
        neutral_trials = []
        neutral_trial_number = 1

        # Randomize photo order
        neutral_photos = block_neutral.copy()
        random.shuffle(neutral_photos)

        for photo_id in neutral_photos:
            if photo_id in missing_set:
                photo_path = placeholder_filename
            else:
                photo_path = f"IASP/{photo_id}.jpg"

            neutral_trials.append({
                'trial_number': neutral_trial_number,
                'block_id': 'block_neutral',
                'technique': 'view',
                'photo_filename': photo_path
            })
            neutral_trial_number += 1

        # Save block_neutral to CSV
        with open(neutral_file_name, 'w', newline='') as f:
            writer = csv.DictWriter(f, fieldnames=neutral_trials[0].keys())
            writer.writeheader()
            writer.writerows(neutral_trials)

        print(f"Saved randomized trial file: {neutral_file_name}")

        # ----------------------------------------------------------
        # Create block_practice trials file
        practice_file_name = 'emotion_regulation_practice_trials.csv'
        practice_trials = []
        practice_trial_number = 1

        # Randomize photo order
        practice_photos = block_practice.copy()
        random.shuffle(practice_photos)

        for photo_id in practice_photos:
            if photo_id in missing_set:
                photo_path = placeholder_filename
            else:
                photo_path = f"IASP/{photo_id}.jpg"

            practice_trials.append({
                'trial_number': practice_trial_number,
                'block_id': 'block_practice',
                'technique': 'view',
                'photo_filename': photo_path
            })
            practice_trial_number += 1

        # Save block_practice to CSV
        with open(practice_file_name, 'w', newline='') as f:
            writer = csv.DictWriter(f, fieldnames=practice_trials[0].keys())
            writer.writeheader()
            writer.writerows(practice_trials)

        print(f"Saved randomized trial file: {practice_file_name}")
      Begin Experiment:
        # Initialize slice indices
        start = 0
        end = 40

        # Store for logging
        thisExp.addData('block_order', block_order)
        thisExp.addData('block_to_technique', block_to_technique)
      Begin Routine:
        # Define slice for current block
        row_section = f"{start}:{end}"

        # Log which slice was used
        thisExp.addData('row_section', row_section)
      End Routine:
        # Advance slice for next block
        start += 40
        end += 40
  Routine stateMeasure
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    SliderComponent slider_generic
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.05
      size [set every repeat] = (slider_gen_width, 0.1)
      startVal [condition] = $rating_type == 'Generic'
      stopVal [condition] = $rating_type != 'Generic'
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    SliderComponent slider_SAM
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = 1, 2, 3, 4, 5, 6, 7, 8, 9
      letterHeight = 0.05
      pos [set every repeat] = (0, slider_y)
      size [set every repeat] = (slider_width, slider_height)
      startVal [condition] = $rating_type == 'SAM'
      stopVal [condition] = $rating_type != 'SAM'
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    ImageComponent image_SAM
      image [set every repeat] = $picture_path
      pos [set every repeat] = (0, sam_y)
      size [set every repeat] = (sam_width, sam_height)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent t_sm_message
      letterHeight = 0.07
      pos = (0, .35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_message
      wrapWidth = 1.5
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    TextComponent t_label_min
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[0], label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_min_label
      wrapWidth = 0.25
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    TextComponent t_label_max
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[-1], label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_max_label
      wrapWidth = 0.25
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    TextComponent t_continue_sm
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [condition] = $allowContinue == True
      text = Press the SPACEBAR to continue
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    CodeComponent code_sm_helper
      Code Type = Py
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      Begin Experiment:
        # Scale SAM properly
        # Window and coordinate setup
        screen_width, screen_height = win.size
        aspect = screen_width / screen_height  # width / height

        # In 'height' units:
        # - Full screen height = 1.0
        # - Full screen width  = aspect
        leftEdge = -aspect / 2
        rightEdge = aspect / 2
        topEdge = 0.5
        bottomEdge = -0.5


        # --- Generic Slider Scaling ---
        # Full-width slider across screen
        slider_gen_width = aspect * 0.6   # 60% of screen width

        # --- SAM image geometry (pixels) ---
        sam_px_width = 1168
        sam_px_height = 231
        sam_aspect = sam_px_width / sam_px_height  # ≈ 5.065

        # Pictogram/gap geometry (pixels)
        pictogram_px_width = 215
        gap_px_width = 23
        num_pictograms = 5
        num_gaps = num_pictograms - 1

        # Sanity check total width in px (info only)
        total_calc_px = num_pictograms * pictogram_px_width + num_gaps * gap_px_width
        # Note: total_calc_px ≈ 1175; close enough to 1170 given source image padding.

        # --- Layout decisions (height units) ---
        sam_height = 0.25                         # 25% of screen height
        sam_width  = sam_height * sam_aspect      # scaled width based on aspect
        sam_y      = 0.1                          # vertical position of the image

        # Slider layout (height units)
        slider_y      = -0.09                     # vertical position of the slider center
        slider_height = 0.06                      # slider thickness/height
        slider_px_width = sam_px_width - 215
        slider_width = sam_width * (slider_px_width / sam_px_width) # match slider width to image width

        # Label MinMax layout
        label_y = slider_y - 0.2 # slightly below the slider

        # Message Layout
        message_y = sam_y + 0.2

        # Scale factor: px -> 'height' units within the image width
        scale_factor = sam_width / sam_px_width

        pictogram_w = pictogram_px_width * scale_factor
        gap_w       = gap_px_width * scale_factor

        # --- Compute 9 tick x-positions aligned to pictograms (1,3,5,7,9) and gaps (2,4,6,8) ---
        tick_positions = []
        # Start at the center of the first pictogram: left edge + half pictogram width
        x = -sam_width / 2 + pictogram_w / 2

        for i in range(9):
            tick_positions.append(x)
            # Advance: pictogram -> gap -> pictogram -> gap ...
            if i % 2 == 0:  # 0,2,4,6,8 (odd-numbered ticks under pictograms)
                x += pictogram_w / 2 + gap_w / 2
            else:           # 1,3,5,7 (even-numbered ticks under gaps)
                x += gap_w / 2 + pictogram_w / 2

        # Helpful mapping: tick index (0..8) -> value (1..9)
        tick_values = list(range(1, 10))
      Begin Routine:
        allowContinue = False
      Each Frame:
        # Check if either slider has been rated
        rated = (slider_generic.getRating() is not None) or (slider_SAM.getRating() is not None)

        # If rated, allow spacebar to end the routine
        if rated:
            allowContinue = True
        else:
            allowContinue = False
    KeyboardComponent key_resp_sm
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [condition] = $allowContinue == True
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  Routine emotionRegulationCue
    PolygonComponent cross_fixation
      fillColor = white
      shape = cross
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = height
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
    TextComponent t_emotion_regulation_cue
      letterHeight = 0.09
      pos = (0.0, 0.05)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 1
      text [set every repeat] = $technique
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    TextComponent t_blank_delayer
      letterHeight = 0.07
      pos = (0.0, 0.05)
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = $delay_time
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    CodeComponent code_delay_calculator
      Code Type = Py
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      Begin Routine:
        # Gives a random float between 0.5 and 1.5 seconds (i.e., 500–1500 ms)
        # Used for t_blank_delayer
        delay_time = random.uniform(0.5, 1.5)
        thisExp.addData('delay_time', delay_time)
  Routine instruction
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    TextComponent t_instruction
      letterHeight = 0.07
      pos = (0.0, 0.05)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Prompt
    TextComponent t_continue_2
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to begin
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye
    RoutineSettingsComponent goodbye
      stopVal [duration (s)] = 4
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    TextComponent t_goodbye
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = You have completed the trial. Thank you!
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Flow
  LoopInitiator intro_prompts loopType="TrialHandler"
    conditionsFile = loopEmotionRegulationIntro.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Message': 'Picture Viewing Task\n-Neutral or Unpleasant-'},
      {'Message': 'You will see photograph series of pictures that represent a lot of different events that occur in life.'},
      {'Message': 'Pictures show unpleasant events. We will do a practice trial before the actual trial. You can let the experimenter know if you want to stop anytime during this trial. '}]
    Routine welcome
  LoopTerminator intro_prompts
  LoopInitiator state_measure_pretrial loopType="TrialHandler"
    Selected rows = 0:7
    conditionsFile = ../../shared/loop-templates/loopStateMeasure.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'rating_type': 'Generic', 'rating_category': 'Fatigue', 'rating_min_label': 'No fatigue at all', 'rating_max_label': 'As bad as you can imagine', 'picture_path': None, 'rating_message': 'Rate your current fatigue level'},
      {'rating_type': 'Generic', 'rating_category': 'Sleepiness', 'rating_min_label': 'Not at all sleepy', 'rating_max_label': 'As bad as you can imagine', 'picture_path': None, 'rating_message': 'Rate your current sleepiness level'},
      {'rating_type': 'Generic', 'rating_category': 'Pain', 'rating_min_label': 'No pain', 'rating_max_label': 'Worst possible pain', 'picture_path': None, 'rating_message': 'Rate your current pain level'},
      {'rating_type': 'Generic', 'rating_category': 'Pain Unpleasantness', 'rating_min_label': 'Not at all unpleasant pain', 'rating_max_label': 'Worst possible unpleasant pain', 'picture_path': None, 'rating_message': 'Rate your current pain unpleasantness level'},
      {'rating_type': 'SAM', 'rating_category': 'Valence', 'rating_min_label': 'Pleasant', 'rating_max_label': 'Unpleasant', 'picture_path': '../../shared/pictures/sam-valence.png', 'rating_message': 'Rate how pleasant or unpleasant you feel'},
      {'rating_type': 'SAM', 'rating_category': 'Arousal', 'rating_min_label': 'Calm', 'rating_max_label': 'Excited', 'picture_path': '../../shared/pictures/sam-arousal.png', 'rating_message': 'Rate how calm or excited you feel'}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
    Routine stateMeasure
  LoopTerminator state_measure_pretrial
  Routine instruction
  LoopInitiator repeat loopType="TrialHandler"
    conditionsFile = blocks.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'blocka_id': 1},
      {'blocka_id': 2},
      {'blocka_id': 3},
      {'blocka_id': 4}]
    Routine reset
    LoopInitiator unpleasant_trials loopType="TrialHandler"
      Selected rows = $row_section
      conditionsFile = emotion_regulation_unpleasant_trials.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('trial_number', np.int64(1)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/1101.jpg')]),
        OrderedDict([('trial_number', np.int64(2)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/1030.jpg')]),
        OrderedDict([('trial_number', np.int64(3)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/1052.jpg')]),
        OrderedDict([('trial_number', np.int64(4)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/3030.jpg')]),
        OrderedDict([('trial_number', np.int64(5)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/9925.jpg')]),
        OrderedDict([('trial_number', np.int64(6)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/9050.jpg')]),
        OrderedDict([('trial_number', np.int64(7)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/9421.jpg')]),
        OrderedDict([('trial_number', np.int64(8)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/9341.jpg')]),
        OrderedDict([('trial_number', np.int64(9)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/3500.jpg')]),
        OrderedDict([('trial_number', np.int64(10)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/6243.jpg')]),
        OrderedDict([('trial_number', np.int64(11)), ('block_id', 'block4'), ('technique', 'Reappraise'), ('photo_filename', 'IASP/9452.jpg')])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
      Routine emotionRegulationCue
      Routine trial
    LoopTerminator unpleasant_trials
    LoopInitiator state_measure_trials loopType="TrialHandler"
      Selected rows = 0:7
      conditionsFile = ../../shared/loop-templates/loopStateMeasure.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'rating_type': 'Generic', 'rating_category': 'Fatigue', 'rating_min_label': 'No fatigue at all', 'rating_max_label': 'As bad as you can imagine', 'picture_path': None, 'rating_message': 'Rate your current fatigue level'},
        {'rating_type': 'Generic', 'rating_category': 'Sleepiness', 'rating_min_label': 'Not at all sleepy', 'rating_max_label': 'As bad as you can imagine', 'picture_path': None, 'rating_message': 'Rate your current sleepiness level'},
        {'rating_type': 'Generic', 'rating_category': 'Pain', 'rating_min_label': 'No pain', 'rating_max_label': 'Worst possible pain', 'picture_path': None, 'rating_message': 'Rate your current pain level'},
        {'rating_type': 'Generic', 'rating_category': 'Pain Unpleasantness', 'rating_min_label': 'Not at all unpleasant pain', 'rating_max_label': 'Worst possible unpleasant pain', 'picture_path': None, 'rating_message': 'Rate your current pain unpleasantness level'},
        {'rating_type': 'SAM', 'rating_category': 'Valence', 'rating_min_label': 'Pleasant', 'rating_max_label': 'Unpleasant', 'picture_path': '../../shared/pictures/sam-valence.png', 'rating_message': 'Rate how pleasant or unpleasant you feel'},
        {'rating_type': 'SAM', 'rating_category': 'Arousal', 'rating_min_label': 'Calm', 'rating_max_label': 'Excited', 'picture_path': '../../shared/pictures/sam-arousal.png', 'rating_message': 'Rate how calm or excited you feel'}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
      Routine stateMeasure
    LoopTerminator state_measure_trials
  LoopTerminator repeat
  Routine goodbye
